---
API: 3
OpenSesame: 4.0.29
Platform: posix
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/semenzato/Scaricati"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sketchpad END
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="FINE<br />" x=0 y=0 z_index=0

define inline_script INIT
	set description "Executes Python code"
	___run__
	# Valore che definisce quanti trial vogliamo fare - il loopExp può andare avanti per 5 cicli da 24, ma questo numero fa stoppare il ciclo molto prima - 33 trial default
	n_max_trial = 33
	
	# Valore di partenza per il calcolo del ratio (ratio = exp(minVal)  ratio=3 con MinVal=1)
	MinVal = 1.1 
	
	# Valore Massimo di soglia raggiungibile per la gestione del ratio --> se sbaglio troppo, ratio va al massimo a 3 (con MaxVal = 1.1)
	MaxVal = 1.1
	
	# Valore per decidere quante corrette devono essere fatte per aggiornare la soglia. Non esiste il contro-valore down, perchè ratio viene aggiustato ad ogni errore --> 2up 1down default
	n_up = 2
	
	# crea un array di step usati come moltiplicatori per la funzione di incremento del ratio.
	# il primo step va fino a n_reversal_cutoff, poi il usa il secondo
	stepArray = [0.2, 0.15]
	n_reversal_cutoff = 2
	
	# Nome dell'oggetto suono contenuto nel pool
	src = pool['9s.wav']
	
	
	# Init var - non toccare
	repeatCycle=-1
	count=0
	response_subject=''
	dur_target1 = 0
	dur_target2 = 0
	dur_target=0
	dur_other=0
	duration=0
	my_sampler = Sampler(src, volume=1)
	
	# Funzione per il play del suono e print dei tempi effettivi della scheda audio
	def playSound(durata, MSG=""):
	    t0=clock.time()
	    my_sampler.play()
	    clock.sleep(durata)
	    my_sampler.stop()
	    t1= clock.time() - t0
	    print("durata tono "+ MSG +":" + str(t1))
	__end__
	set _prepare ""

define inline_script INIT_BLOCK_TYPE_EXP
	set description "Executes Python code"
	___run__
	import math
	
	BLOCKTYPE='exp'
	print('INIZIO BLOCCO SPERIMENTALE')
	
	ratio = math.exp(MinVal)
	
	count = 0
	countCorretta = 0
	n_reversal = 0
	repeatCycle = -1
	prev_correct = None  # Variabile per tracciare lo stato precedente (None all'inizio)
	__end__
	set _prepare ""

define inline_script INIT_BLOCK_TYPE_PROVA
	set description "Executes Python code"
	___run__
	BLOCKTYPE='prova'
	ratio = 3
	n_reversal = 0
	prev_correct = None  # Variabile per tracciare lo stato precedente (None all'inizio)
	__end__
	set _prepare ""

define sketchpad blank
	set duration 500
	set description "Displays stimuli"

define inline_script checkRepeat_Exp
	set description "Executes Python code"
	___run__
	# Gestione risposta per rifare la pratica
	if count >= n_max_trial:
	    repeatCycle=0
	    
	print('repeatCycle: ' + str(repeatCycle))
	__end__
	set _prepare ""

define inline_script checkRepeat_Prova
	set description "Executes Python code"
	___run__
	# Gestione risposta per rifare la pratica
	if response=='s':
	    repeatCycle=1
	    count=0
	else:
	    repeatCycle=0
	    
	print('repeatCycle: ' + str(repeatCycle))
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run INIT True
	run welcome True
	run INIT_BLOCK_TYPE_PROVA True
	run loopProva True
	run INIT_BLOCK_TYPE_EXP True
	run loopExp True
	run END True

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
	Task Toffalini - Toffoli 
	Tecnici: Errigo - Semenzato
	
	
	Due target vengono presentati insieme a suoni di durate da confrontare
	Le durate si avvicinano o allontanano in base ad una funzione 2up/1down logaritmica che controlla le risposte date
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script initTrial
	set description "Executes Python code"
	___run__
	import random
	
	
	if BLOCKTYPE=='prova':
	    duration=random.randint(1000, 5000)
	    duration_cutoff = 3000
	    
	elif BLOCKTYPE=='exp':
	    duration=random.randint(300, 9000)
	    duration_cutoff = 3000
	        
	# se la durata supera un cutoff (medio tra i vertici) allora il target è il valore pescato,
	# mentre other è target / ratio. Se sono sotto cutoff è il contrario
	if duration > duration_cutoff:
	    dur_target = duration
	    dur_other = round(duration / ratio)
	else:
	    dur_target = round(duration * ratio)
	    dur_other = duration
	    
	# print DEBUG
	print('ratio: '+ str(ratio))
	print('dur_cutoff: '+ str(duration_cutoff))
	print('dur_target: '+ str(dur_target))
	print('dur_other: '+ str(dur_other))
	
	
	# Dalla lista so dove è posizionato il target e quindi distribuisco le durate in base alle posizioni
	if pos1 == 'target':
	    dur_target1 = dur_target
	    dur_target2 = dur_other
	    print('target in pos1')
	else:
	    dur_target1 = dur_other
	    dur_target2 = dur_target
	    print('target in pos2')
	
	        
	__end__
	set _prepare ""

define logger log
	set description "Logs experimental data"
	set auto_log yes

define loop loopExp
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if "repeatCycle == 0"
	setcycle 0 target1 1
	setcycle 0 target2 2
	setcycle 0 pos1 other
	setcycle 0 pos2 target
	setcycle 0 correct_response p
	setcycle 1 target1 1
	setcycle 1 target2 3
	setcycle 1 pos1 other
	setcycle 1 pos2 target
	setcycle 1 correct_response p
	setcycle 2 target1 1
	setcycle 2 target2 4
	setcycle 2 pos1 other
	setcycle 2 pos2 target
	setcycle 2 correct_response p
	setcycle 3 target1 2
	setcycle 3 target2 1
	setcycle 3 pos1 other
	setcycle 3 pos2 target
	setcycle 3 correct_response p
	setcycle 4 target1 2
	setcycle 4 target2 3
	setcycle 4 pos1 other
	setcycle 4 pos2 target
	setcycle 4 correct_response p
	setcycle 5 target1 2
	setcycle 5 target2 4
	setcycle 5 pos1 other
	setcycle 5 pos2 target
	setcycle 5 correct_response p
	setcycle 6 target1 3
	setcycle 6 target2 1
	setcycle 6 pos1 other
	setcycle 6 pos2 target
	setcycle 6 correct_response p
	setcycle 7 target1 3
	setcycle 7 target2 2
	setcycle 7 pos1 other
	setcycle 7 pos2 target
	setcycle 7 correct_response p
	setcycle 8 target1 3
	setcycle 8 target2 4
	setcycle 8 pos1 other
	setcycle 8 pos2 target
	setcycle 8 correct_response p
	setcycle 9 target1 4
	setcycle 9 target2 1
	setcycle 9 pos1 other
	setcycle 9 pos2 target
	setcycle 9 correct_response p
	setcycle 10 target1 4
	setcycle 10 target2 2
	setcycle 10 pos1 other
	setcycle 10 pos2 target
	setcycle 10 correct_response p
	setcycle 11 target1 4
	setcycle 11 target2 3
	setcycle 11 pos1 other
	setcycle 11 pos2 target
	setcycle 11 correct_response p
	setcycle 12 target1 1
	setcycle 12 target2 2
	setcycle 12 pos1 target
	setcycle 12 pos2 other
	setcycle 12 correct_response w
	setcycle 13 target1 1
	setcycle 13 target2 3
	setcycle 13 pos1 target
	setcycle 13 pos2 other
	setcycle 13 correct_response w
	setcycle 14 target1 1
	setcycle 14 target2 4
	setcycle 14 pos1 target
	setcycle 14 pos2 other
	setcycle 14 correct_response w
	setcycle 15 target1 2
	setcycle 15 target2 1
	setcycle 15 pos1 target
	setcycle 15 pos2 other
	setcycle 15 correct_response w
	setcycle 16 target1 2
	setcycle 16 target2 3
	setcycle 16 pos1 target
	setcycle 16 pos2 other
	setcycle 16 correct_response w
	setcycle 17 target1 2
	setcycle 17 target2 4
	setcycle 17 pos1 target
	setcycle 17 pos2 other
	setcycle 17 correct_response w
	setcycle 18 target1 3
	setcycle 18 target2 1
	setcycle 18 pos1 target
	setcycle 18 pos2 other
	setcycle 18 correct_response w
	setcycle 19 target1 3
	setcycle 19 target2 2
	setcycle 19 pos1 target
	setcycle 19 pos2 other
	setcycle 19 correct_response w
	setcycle 20 target1 3
	setcycle 20 target2 4
	setcycle 20 pos1 target
	setcycle 20 pos2 other
	setcycle 20 correct_response w
	setcycle 21 target1 4
	setcycle 21 target2 1
	setcycle 21 pos1 target
	setcycle 21 pos2 other
	setcycle 21 correct_response w
	setcycle 22 target1 4
	setcycle 22 target2 2
	setcycle 22 pos1 target
	setcycle 22 pos2 other
	setcycle 22 correct_response w
	setcycle 23 target1 4
	setcycle 23 target2 3
	setcycle 23 pos1 target
	setcycle 23 pos2 other
	setcycle 23 correct_response w
	run new_sequence

define loop loopProva
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if "repeatCycle == 0"
	setcycle 0 target1 1
	setcycle 0 target2 2
	setcycle 0 pos1 other
	setcycle 0 pos2 target
	setcycle 0 correct_response p
	setcycle 1 target1 1
	setcycle 1 target2 3
	setcycle 1 pos1 other
	setcycle 1 pos2 target
	setcycle 1 correct_response p
	setcycle 2 target1 1
	setcycle 2 target2 4
	setcycle 2 pos1 other
	setcycle 2 pos2 target
	setcycle 2 correct_response p
	setcycle 3 target1 2
	setcycle 3 target2 1
	setcycle 3 pos1 other
	setcycle 3 pos2 target
	setcycle 3 correct_response p
	setcycle 4 target1 2
	setcycle 4 target2 3
	setcycle 4 pos1 other
	setcycle 4 pos2 target
	setcycle 4 correct_response p
	setcycle 5 target1 2
	setcycle 5 target2 4
	setcycle 5 pos1 other
	setcycle 5 pos2 target
	setcycle 5 correct_response p
	setcycle 6 target1 3
	setcycle 6 target2 1
	setcycle 6 pos1 other
	setcycle 6 pos2 target
	setcycle 6 correct_response p
	setcycle 7 target1 3
	setcycle 7 target2 2
	setcycle 7 pos1 other
	setcycle 7 pos2 target
	setcycle 7 correct_response p
	setcycle 8 target1 3
	setcycle 8 target2 4
	setcycle 8 pos1 other
	setcycle 8 pos2 target
	setcycle 8 correct_response p
	setcycle 9 target1 4
	setcycle 9 target2 1
	setcycle 9 pos1 other
	setcycle 9 pos2 target
	setcycle 9 correct_response p
	setcycle 10 target1 4
	setcycle 10 target2 2
	setcycle 10 pos1 other
	setcycle 10 pos2 target
	setcycle 10 correct_response p
	setcycle 11 target1 4
	setcycle 11 target2 3
	setcycle 11 pos1 other
	setcycle 11 pos2 target
	setcycle 11 correct_response p
	setcycle 12 target1 1
	setcycle 12 target2 2
	setcycle 12 pos1 target
	setcycle 12 pos2 other
	setcycle 12 correct_response w
	setcycle 13 target1 1
	setcycle 13 target2 3
	setcycle 13 pos1 target
	setcycle 13 pos2 other
	setcycle 13 correct_response w
	setcycle 14 target1 1
	setcycle 14 target2 4
	setcycle 14 pos1 target
	setcycle 14 pos2 other
	setcycle 14 correct_response w
	setcycle 15 target1 2
	setcycle 15 target2 1
	setcycle 15 pos1 target
	setcycle 15 pos2 other
	setcycle 15 correct_response w
	setcycle 16 target1 2
	setcycle 16 target2 3
	setcycle 16 pos1 target
	setcycle 16 pos2 other
	setcycle 16 correct_response w
	setcycle 17 target1 2
	setcycle 17 target2 4
	setcycle 17 pos1 target
	setcycle 17 pos2 other
	setcycle 17 correct_response w
	setcycle 18 target1 3
	setcycle 18 target2 1
	setcycle 18 pos1 target
	setcycle 18 pos2 other
	setcycle 18 correct_response w
	setcycle 19 target1 3
	setcycle 19 target2 2
	setcycle 19 pos1 target
	setcycle 19 pos2 other
	setcycle 19 correct_response w
	setcycle 20 target1 3
	setcycle 20 target2 4
	setcycle 20 pos1 target
	setcycle 20 pos2 other
	setcycle 20 correct_response w
	setcycle 21 target1 4
	setcycle 21 target2 1
	setcycle 21 pos1 target
	setcycle 21 pos2 other
	setcycle 21 correct_response w
	setcycle 22 target1 4
	setcycle 22 target2 2
	setcycle 22 pos1 target
	setcycle 22 pos2 other
	setcycle 22 correct_response w
	setcycle 23 target1 4
	setcycle 23 target2 3
	setcycle 23 pos1 target
	setcycle 23 pos2 other
	setcycle 23 correct_response w
	run new_sequence

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initTrial True
	run fixation True
	run target1 True
	run tono_target1 True
	run blank True
	run target2 True
	run tono_target2 True
	run tar1VStar2 True
	run response_target True
	run responseAnalize True
	run repeat_Prova "count == 3 and BLOCKTYPE == 'prova'"
	run response_repeat_prova "count == 3 and BLOCKTYPE == 'prova'"
	run checkRepeat_Prova "count == 3 and BLOCKTYPE == 'prova'"
	run checkRepeat_Exp "BLOCKTYPE == 'exp'"
	run log True

define sketchpad repeat_Prova
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Vuoi ripetere la prova?<br />Premi 'S' per sì e 'N' per no" x=0 y=0 z_index=0

define inline_script responseAnalize
	set description "Executes Python code"
	___run__
	import math
	
	#check the response and set new ratio
	response_subject=response
	
	
	# scelgo lo step count 0 di default (prima posizione nell'array degli step)
	step_index = 0
	
	# controllo lo stato della risposta precedente per vedere se si tratta di un reversal
	if prev_correct is not None and prev_correct != correct:
	    n_reversal+=1
	    if n_reversal > n_reversal_cutoff:
	    # se sono sopra la soglia dei reversal, uso lo step successivo nell'array degli step
	        step_index = 1
	print('step index: ' + str(step_index))
	
	if(correct == 1):
	    print("risposta corretta")
	    if BLOCKTYPE == 'prova':
	        # In caso di prova la ratio rimane fissa a 3
	        ratio=3
	    elif BLOCKTYPE == 'exp':
	        countCorretta+=1
	        
	        if(countCorretta==n_up):
	            # Calcolo della ratio con funzione logaritmica
	            # MinVal viene aggiornata in più o in meno con 10^step (indice in stepArray = count del trial) --> 10^0.2 = 1.5 --> 1.1/1.5 = 0.69
	            # La ratio è la funzione exp di questo risultato --> e^(0.69) = 2.00. Quindi va da 3 a 2 circa e poi a scalare se continuo a fare giusto (asintoto 1.0).
	            # Se dividi, MinVal diminuisce, quindi le durate si avvicinano e il compito diventa più difficile
	            MinVal /= 10 ** stepArray[step_index]
	            ratio = math.exp(MinVal)
	            countCorretta = 0
	            
	else:
	    print("risposta errata")
	    if BLOCKTYPE == 'prova':
	        ratio=3
	    elif BLOCKTYPE == 'exp':
	        countCorretta = 0
	        # Calcolo della ratio con funzione logaritmica
	        # MinVal viene aggiornata in più o in meno con 10^step --> 10^0.2 = 1.5 --> 1.1*1.5 = 1.65. C'è il tetto impostato a MaxVal (1.1 default).
	        # La ratio è la funzione exp di questo risultato --> e^(1.1) = 3.00. Quindi se continuo a sbagliare dall'inizio resta a 3.
	        # Se moltiplichi, MinVal aumenta, quindi le durate si allontanano e il compito diventa più facile
	        MinVal *= 10 ** stepArray[step_index]
	        if (MaxVal is not None) and (MinVal > MaxVal):
	            MinVal = MaxVal
	        ratio = math.exp(MinVal)
	
	# Aggiorna lo stato precedente per il prossimo trial
	prev_correct = correct
	
	#update count to setup next trial
	count+=1
	print('count: ' + str(count))
	__end__
	set _prepare ""

define keyboard_response response_repeat_prova
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "s;n"

define keyboard_response response_target
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "w;p"

define sketchpad tar1VStar2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{target1}.jpg" scale=0.2 show_if=True x=-256 y=0 z_index=0
	draw image center=1 file="{target2}.jpg" scale=0.2 show_if=True x=256 y=0 z_index=0

define sketchpad target1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{target1}.jpg" scale=0.5 show_if=True x=0 y=0 z_index=0

define sketchpad target2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{target2}.jpg" scale=0.5 show_if=True x=0 y=0 z_index=0

define inline_script tono_target1
	set description "Executes Python code"
	___run__
	playSound(dur_target1,"Target 1")
	__end__
	set _prepare ""

define inline_script tono_target2
	set description "Executes Python code"
	___run__
	playSound(dur_target2,"Target 2")
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Ciao! ISTRUZIONI<br />" x=0 y=0 z_index=0

