---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\enric\\OneDrive - Università degli Studi di Padova\\Documents\\_GRANTS\\PRIN-PNRR 2022\\Materiali\\Time_reproduction OpenSesame"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define sketchpad Conclusion
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="Grazie di tutto!" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initialsetting True
	run getting_started True
	run welcome True
	run instructionsPractice True
	run loopPractice True
	run instructionsExperiment True
	run loopExperiment True
	run Conclusion True

define sketchpad fixation
	set duration 300
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script initialsetting
	set description "Executes Python code"
	___run__
	from openexp.keyboard import keyboard
	import time
	__end__
	set _prepare ""

define sketchpad instructionsExperiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="Ora inizia l'esperimento! <br /><br />Quando sei pronto/a clicca la barra dello spazio!" x=0 y=0 z_index=0

define sketchpad instructionsPractice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="Adesso comparirà un grosso bottone rosso che accende una lampadina. La lampadina rimarrà accesa per un po’ di tempo. Quando si spegne, devi provare ad accendere tu la lampadina tenendo premuta la barra dello spazio cercando di lasciarla accesa per lo stesso identico tempo; quando dovrai spegnere la lampadina, rilascia la barra dello spazio.<br /><br />Per fare delle prove, schiaccia la barra dello spazio." x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop loopExperiment
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 durationTrue 2000
	setcycle 0 duration 2000
	setcycle 0 type experiment
	setcycle 1 durationTrue 3000
	setcycle 1 duration 3000
	setcycle 1 type experiment
	setcycle 2 durationTrue 4000
	setcycle 2 duration 4000
	setcycle 2 type experiment
	setcycle 3 durationTrue 5000
	setcycle 3 duration 5000
	setcycle 3 type experiment
	setcycle 4 durationTrue 6000
	setcycle 4 duration 6000
	setcycle 4 type experiment
	setcycle 5 durationTrue 7000
	setcycle 5 duration 7000
	setcycle 5 type experiment
	setcycle 6 durationTrue 8000
	setcycle 6 duration 8000
	setcycle 6 type experiment
	setcycle 7 durationTrue 9000
	setcycle 7 duration 9000
	setcycle 7 type experiment
	setcycle 8 durationTrue 10000
	setcycle 8 duration 10000
	setcycle 8 type experiment
	setcycle 9 durationTrue 11000
	setcycle 9 duration 11000
	setcycle 9 type experiment
	setcycle 10 durationTrue 12000
	setcycle 10 duration 12000
	setcycle 10 type experiment
	run sequenceExperiment

define loop loopPractice
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 durationTrue 2000
	setcycle 0 duration 2000
	setcycle 0 type practice
	setcycle 1 durationTrue 4000
	setcycle 1 duration 4000
	setcycle 1 type practice
	setcycle 2 durationTrue 6000
	setcycle 2 duration 6000
	setcycle 2 type practice
	run sequenceExperiment

define inline_script manageTrial
	set description "Executes Python code"
	___run__
	myCanvas = Canvas()
	pathOff = exp.pool["lampoff.jpeg"]
	pathOn = exp.pool["lampon.jpeg"]
	
	print(var.duration)
	
	myCanvas.image(pathOff)
	myCanvas.show()
	clock.sleep(300)
	
	myCanvas.clear()
	myCanvas.image(pathOn)
	myCanvas.show()
	
	clock.sleep(var.duration)
	
	myCanvas.clear()
	myCanvas.image(pathOff)
	myCanvas.show()
	
	kb = Keyboard()
	kb.flush()
	pressed_key, timeStart = kb.get_key(keylist=['space'],timeout=None)
	print('Keyboard pressed')
	
	myCanvas.image(pathOn)
	myCanvas.show()
	kb = Keyboard()
	kb.flush()
	released_key, timeEnd = kb.get_key_release(keylist=['space'],timeout=None)
	print('Keyboard released')
	
	
	myCanvas.image(pathOff)
	myCanvas.show()
	clock.sleep(300)
	
	var.reproducedTime = timeEnd - timeStart
	print(var.reproducedTime)
	__end__
	set _prepare ""

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="Ora inizia l'esperimento! <br /><br />Quando sei pronto/a clicca la barra dello spazio!" x=0 y=0 z_index=0

define sequence sequenceExperiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation True
	run manageTrial True
	run logger True

define inline_script stopTrialOn
	set description "Executes Python code"
	___run__
	while True:
	    released_key, timeEnd = kb.get_key_release(timeout=10)
	    if released_key == "space":
	        break  # Stop loop when the same key is released
	
	reproducedTime = timeEnd - timeStart
	
	#while True:
	#    key, timestamp = kb.get_key(timeout=10)
	#    if key is None:
	#        break
	#    time.sleep(0.01)
	__end__
	set _prepare ""

define sketchpad trialOff
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="lampoff.jpeg" scale=1 show_if=True x=0 y=0 z_index=0

define sketchpad trialOn
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="lampon.jpeg" scale=1 show_if=True x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0 y=0 z_index=0

